  # Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: Rigol DS7000 Oscilloscope

# The version string should be updated whenever changes are made to this config file
version: 1.1

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: Rigol_DS7000_Oscilloscope

# General VISA settings for the instrument.
[VISA settings]

# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa = True

# Reset the interface (not the instrument) at startup (True or False).  Default is False
reset: True

# Time (in seconds) before the timing out while waiting for an instrument response. Default is 5
timeout: 10

# Query instrument errors (True or False).  If True, every command sent to the device will
# be followed by an error query.  This is useful when testing new setups, but may degrade
# performance by slowing down the instrument communication. 
query_instr_errors: False 

# Bit mask for checking status byte errors (default is 255, include all errors)
# The bits signal the following errors:
# 0: Operation
# 1: Request control
# 2: Query error
# 3: Device error
# 4: Execution error
# 5: Command error
# 6: User request
# 7: Power on
error_bit_mask: 255

# SCPI string to be used when querying for instrument error messages
error_cmd: :SYST:ERR?

# Initialization commands are sent to the instrument when starting the driver
# *RST will reset the device, *CLS clears the interface, :BAND:VID:AUTO 1
init: :INIT:CONT ON;:FORM:BORD NORM

# Boolean string values (used for sending True/False to instrument), default is 1 and 0
#str_true: ON
#str_false: OFF

# Final commands sent to the instrument when closing the driver
final: 


[Model and options]
# The option section allow instruments with different options to use the same driver

# List of models supported by this driver
# model_str_1: N90xx

# Check instrument model id at startup (True or False). Default is False
# check_model: True

# If check_model is set to True, define command for getting the model (default is *IDN?)
#model_cmd: *IDN?

# Valid model strings returned by the instrument. Default value = model_str
model_id_1: RIGOL TECHNOLOGIES,DS7054

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
#define Acquisition mode.  There are a bunch of dependency issues if both are selected.

#define all settings common to both modes here.


########################### Time base and Sampling rate
[Time mode]
datatype: COMBO
def_value: MAIN
combo_def_1: MAIN
combo_def_2: XY
combo_def_3: ROLL
cmd_def_1: MAIN
cmd_def_2: XY
cmd_def_3: ROLL
set_cmd: :TIMebase:MODE
get_cmd: :TIMebase:MODE?
group: Timebase
show_in_measurement_dlg: True

[Time scale]
unit: s
datatype: DOUBLE
def_value: 10e-6
low_lim: 1e-9
high_lim: 1000
set_cmd: :TIMebase:MAIN:SCALe
get_cmd: :TIMebase:MAIN:SCALe?
section: Settings
state_quant: Time mode
state_value: MAIN
group: Timebase
show_in_measurement_dlg: True

[Time offset]
unit: s
datatype: DOUBLE
def_value: 0e-9
set_cmd: :TIMebase:MAIN:OFFSet
get_cmd: :TIMebase:MAIN:OFFSet?
section: Settings
state_quant: Time mode
state_value: MAIN
group: Timebase

#[Sample rate]
#datatype: DOUBLE
#get_cmd: :ACQuire:SRATe?
#permission: READ
#section: Settings
#group: Timebase
#show_in_measurement_dlg: True

#[Sample points]
#datatype: DOUBLE
#def_value: 1e6
#set_cmd: :ACQuire:MDEPth
#get_cmd: :ACQuire:MDEPth?
#section: Settings
#group: Timebase

#######################################   Trigger   #########################################

#### COMON
[Trigger Mode]
datatype: COMBO
def_value: SLOPe
combo_def_1: EDGE
combo_def_2: PULSe
combo_def_3: SLOPe 
combo_def_4: VIDeo
cmd_def_1: EDGE
cmd_def_2: PULSe
cmd_def_3: SLOPe 
cmd_def_4: VIDeo
set_cmd: :TRIGger:MODE
get_cmd: :TRIGger:MODE?
section: Settings
group: Trigger
show_in_measurement_dlg: True

# LFR blocks the DC components and rejects the low frequency components
# HFR rejects the high frequency components.

[Trigger Coupling]
datatype: COMBO
def_value: DC
combo_def_1: DC
combo_def_2: AC
combo_def_3: LF Reject      
combo_def_4: HF Reject      
cmd_def_1: DC
cmd_def_2: AC
cmd_def_3: LFR
cmd_def_4: HFR
set_cmd: :TRIGger:COUPling
get_cmd: :TRIGger:COUPling? 
section: Settings
group: Trigger


[Trigger Sweep]
datatype: COMBO
def_value: NORM
combo_def_1: AUTO
combo_def_2: NORM
combo_def_3: SING
cmd_def_1: AUTO
cmd_def_2: NORM
cmd_def_3: SING
set_cmd: :TRIGger:SWEep
get_cmd: :TRIGger:SWEep?
section: Settings
group: Trigger



### Tigger EDGE
[Trigger EDGE Slope]
datatype: COMBO
def_value: rising
combo_def_1: rising
combo_def_2: falling
combo_def_3: rising and falling
cmd_def_1: POS
cmd_def_2: NEG
cmd_def_3: RFAL
set_cmd: :TRIGger:EDGE:SLOPe
get_cmd: :TRIGger:EDGE:SLOPe? 
state_quant: Trigger Mode
state_value: EDGE
section: Settings
group: Trigger

[Trigger EDGE Source]
datatype: COMBO
def_value: Channel 1
combo_def_1: Channel 1
combo_def_2: Channel 2
combo_def_3: Channel 3
combo_def_4: Channel 4
combo_def_5: EXT
combo_def_6: ACL
cmd_def_1: CHAN1
cmd_def_2: CHAN2
cmd_def_3: CHAN3
cmd_def_4: CHAN4
cmd_def_5: EXT
cmd_def_6: ACL
set_cmd: :TRIG:EDGE:SOUR
get_cmd: :TRIG:EDGE:SOUR?
state_quant: Trigger Mode
state_value: EDGE
section: Settings
group: Trigger

[Trigger EDGE level]
datatype: DOUBLE
unit: V
def_value: 0.1
set_cmd: :TRIGger:EDGE:LEVel
get_cmd: :TRIGger:EDGE:LEVel? 
state_quant: Trigger Mode
state_value: EDGE
section: Settings
group: Trigger


### Tigger Pulse
[Trigger Pulse Source]
datatype: COMBO
def_value: Channel 1
combo_def_1: Channel 1
combo_def_2: Channel 2
combo_def_3: Channel 3
combo_def_4: Channel 4
cmd_def_1: CHAN1
cmd_def_2: CHAN2
cmd_def_3: CHAN3
cmd_def_4: CHAN4
set_cmd: :TRIG:PULSe:SOUR
get_cmd: :TRIG:PULSe:SOUR?
state_quant: Trigger Mode
state_value: PULSe
section: Settings
group: Trigger

[Trigger Pulse level]
datatype: DOUBLE
unit: V
def_value: 0.1
set_cmd: :TRIGger:PULSe:LEVel
get_cmd: :TRIGger:PULSe:LEVel? 
state_quant: Trigger Mode
state_value: PULSe
section: Settings
group: Trigger


### Tigger Slope
[Trigger Slope Source]
datatype: COMBO
def_value: Channel 1
combo_def_1: Channel 1
combo_def_2: Channel 2
combo_def_3: Channel 3
combo_def_4: Channel 4
cmd_def_1: CHAN1
cmd_def_2: CHAN2
cmd_def_3: CHAN3
cmd_def_4: CHAN4
set_cmd: :TRIG:SLOPe:SOUR
get_cmd: :TRIG:SLOPe:SOUR?
state_quant: Trigger Mode
state_value: SLOPe
section: Settings
group: Trigger


### Tigger VIDeo
[Trigger VIDeo Source]
datatype: COMBO
def_value: Channel 1
combo_def_1: Channel 1
combo_def_2: Channel 2
combo_def_3: Channel 3
combo_def_4: Channel 4
cmd_def_1: CHAN1
cmd_def_2: CHAN2
cmd_def_3: CHAN3
cmd_def_4: CHAN4
set_cmd: :TRIG:VIDeo:SOUR
get_cmd: :TRIG:VIDeo:SOUR?
state_quant: Trigger Mode
state_value: VIDeo
section: Settings
group: Trigger

###########################   channel setting  ######################


[Ch1 - Enabled]
datatype: BOOLEAN
def_value: 1
set_cmd: :CHAN1:DISP
get_cmd: :CHAN1:DISP?
section: Channel Setting
group: Channel1
show_in_measurement_dlg: True

[Channel1 Units]
datatype: COMBO
def_value: VOLT
combo_def_1: VOLT
combo_def_2: WATT
combo_def_3: AMP
combo_def_4: UNKN
cmd_def_1: VOLT
cmd_def_2: WATT
cmd_def_3: WATT
cmd_def_4: UNKN
set_cmd: :CHANnel1:UNITs 
get_cmd: :CHANnel1:UNITs? 
section: Channel Setting
group: Channel1

[Channel1 Offset]
datatype: DOUBLE
unit: V
def_value: 0
set_cmd: :CHANnel1:OFFSet 
get_cmd: :CHANnel1:OFFSet? 
section: Channel Setting
group: Channel1

[Channel1 Coupling]
datatype: COMBO
def_value: AC
combo_def_1: AC
combo_def_2: DC
cmd_def_1: AC
cmd_def_2: DC
set_cmd: :CHANnel1:COUPling
get_cmd: :CHANnel1:COUPling? 
section: Channel Setting
group: Channel1

[Channel1 Scale]
datatype: DOUBLE
unit: V
def_value: 1
set_cmd: :CHANnel1:SCALe
get_cmd: :CHANnel1:SCALe?
section: Channel Setting
group: Channel1
show_in_measurement_dlg: True


[Channel1 Impendance]
datatype: COMBO
def_value: FIFT
combo_def_1: FIFT
combo_def_2: OMEG 
cmd_def_1: FIFT
cmd_def_2: OMEG
set_cmd: :CHANnel1:IMPedance
get_cmd: :CHANnel1:IMPedance? 
section: Channel Setting
group: Channel1





[Ch2 - Enabled]
datatype: BOOLEAN
def_value: 1
set_cmd: :CHAN2:DISP
get_cmd: :CHAN2:DISP?
section: Channel Setting
group: Channel2
show_in_measurement_dlg: True

[Channel2 Units]
datatype: COMBO
def_value: VOLT
combo_def_1: VOLT
combo_def_2: WATT
combo_def_3: AMP
combo_def_4: UNKN
cmd_def_1: VOLT
cmd_def_2: WATT
cmd_def_3: WATT
cmd_def_4: UNKN
set_cmd: :Channel2:UNITs 
get_cmd: :Channel2:UNITs? 
section: Channel Setting
group: Channel2

[Channel2 Offset]
datatype: DOUBLE
unit: V
def_value: 0
set_cmd: :Channel2:OFFSet 
get_cmd: :Channel2:OFFSet? 
section: Channel Setting
group: Channel2

[Channel2 Coupling]
datatype: COMBO
def_value: AC
combo_def_1: AC
combo_def_2: DC
cmd_def_1: AC
cmd_def_2: DC
set_cmd: :Channel2:COUPling
get_cmd: :Channel2:COUPling? 
section: Channel Setting
group: Channel2

[Channel2 Scale]
datatype: DOUBLE
unit: V
def_value: 1
set_cmd: :Channel2:SCALe
get_cmd: :Channel2:SCALe?
section: Channel Setting
group: Channel2
show_in_measurement_dlg: True

[Channel2 Impendance]
datatype: COMBO
def_value: FIFT
combo_def_1: FIFT
combo_def_2: OMEG 
cmd_def_1: FIFT
cmd_def_2: OMEG
set_cmd: :Channel2:IMPedance
get_cmd: :Channel2:IMPedance? 
section: Channel Setting
group: Channel2


[Ch3 - Enabled]
datatype: BOOLEAN
def_value: 1
set_cmd: :CHAN3:DISP
get_cmd: :CHAN3:DISP?
section: Channel Setting
group: Channel3
show_in_measurement_dlg: True

[Channel3 Units]
datatype: COMBO
def_value: VOLT
combo_def_1: VOLT
combo_def_2: WATT
combo_def_3: AMP
combo_def_4: UNKN
cmd_def_1: VOLT
cmd_def_2: WATT
cmd_def_3: WATT
cmd_def_4: UNKN
set_cmd: :Channel3:UNITs 
get_cmd: :Channel3:UNITs? 
section: Channel Setting
group: Channel3

[Channel3 Offset]
datatype: DOUBLE
unit: V
def_value: 0
set_cmd: :Channel3:OFFSet 
get_cmd: :Channel3:OFFSet? 
section: Channel Setting
group: Channel3

[Channel3 Coupling]
datatype: COMBO
def_value: AC
combo_def_1: AC
combo_def_2: DC
cmd_def_1: AC
cmd_def_2: DC
set_cmd: :Channel3:COUPling
get_cmd: :Channel3:COUPling? 
section: Channel Setting
group: Channel3

[Channel3 Scale]
datatype: DOUBLE
unit: V
def_value: 1
set_cmd: :Channel3:SCALe
get_cmd: :Channel3:SCALe?
section: Channel Setting
group: Channel3
show_in_measurement_dlg: True

[Channel3 Impendance]
datatype: COMBO
def_value: FIFT
combo_def_1: FIFT
combo_def_2: OMEG 
cmd_def_1: FIFT
cmd_def_2: OMEG
set_cmd: :Channel3:IMPedance
get_cmd: :Channel3:IMPedance? 
section: Channel Setting
group: Channel3



[Ch4 - Enabled]
datatype: BOOLEAN
def_value: 1
set_cmd: :CHAN4:DISP
get_cmd: :CHAN4:DISP?
section: Channel Setting
group: Channel4
show_in_measurement_dlg: True


[Channel4 Units]
datatype: COMBO
def_value: VOLT
combo_def_1: VOLT
combo_def_2: WATT
combo_def_3: AMP
combo_def_4: UNKN
cmd_def_1: VOLT
cmd_def_2: WATT
cmd_def_3: WATT
cmd_def_4: UNKN
set_cmd: :Channel4:UNITs 
get_cmd: :Channel4:UNITs? 
section: Channel Setting
group: Channel4

[Channel4 Offset]
datatype: DOUBLE
unit: V
def_value: 0
set_cmd: :Channel4:OFFSet 
get_cmd: :Channel4:OFFSet? 
section: Channel Setting
group: Channel4

[Channel4 Coupling]
datatype: COMBO
def_value: AC
combo_def_1: AC
combo_def_2: DC
cmd_def_1: AC
cmd_def_2: DC
set_cmd: :Channel4:COUPling
get_cmd: :Channel4:COUPling? 
section: Channel Setting
group: Channel4

[Channel4 Scale]
datatype: DOUBLE
unit: V
def_value: 1
set_cmd: :Channel4:SCALe
get_cmd: :Channel4:SCALe?
section: Channel Setting
group: Channel4
show_in_measurement_dlg: True

[Channel4 Impendance]
datatype: COMBO
def_value: FIFT
combo_def_1: FIFT
combo_def_2: OMEG 
cmd_def_1: FIFT
cmd_def_2: OMEG
set_cmd: :Channel4:IMPedance
get_cmd: :Channel4:IMPedance? 
section: Channel Setting
group: Channel4

#######################   Readout   ######################

[Ch1 - Data]
datatype: VECTOR
permission: READ
x_name: Time
x_unit: s
show_in_measurement_dlg: True
state_quant: Ch1 - Enabled
state_value_1: 1

[Ch2 - Data]
datatype: VECTOR
permission: READ
x_name: Time
x_unit: s
show_in_measurement_dlg: True
state_quant: Ch2 - Enabled
state_value_1: 1

[Ch3 - Data]
datatype: VECTOR
permission: READ
x_name: Time
x_unit: s
show_in_measurement_dlg: True
state_quant: Ch3 - Enabled
state_value_1: 1

[Ch4 - Data]
datatype: VECTOR
permission: READ
x_name: Time
x_unit: s
show_in_measurement_dlg: True
state_quant: Ch4 - Enabled
state_value_1: 1