# Instrument driver configuration file.

# Author: Jiahao Yuan
# Based on RohdeSchwarz_RFSource.
[General settings]

# The name is shown in all the configuration windows
name: Rohde&Schwarz SMW200A

# The version string should be updated whenever changes are made to this config file
version: 0.1

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path:



[Model and options]
# The option section allow instruments with different options to use the same driver

# List of models supported by this driver
model_str_1: SMW200A


# Check instrument model id at startup (True or False). Default is False
check_model: False

# Valid model strings returned by the instrument. Default value = model_str
# model_id_1:

# Installed options (shown as checkbox controls)
# option_str_1: AM, FM, Phase modulation
# option_str_2: Pulse modulation
# option_str_3: Narrow pulse modulation
# option_str_4: Ultra-low phase noise
# option_str_5: Enhanced ultra-low phase noise
# option_str_6: Wideband I/Q modulation, differential inputs
# option_str_7: Wideband I/Q modulation, single-ended inputs
# option_str_8: Wideband modulation below 3.2 GHz
# option_str_9: High-performance pulse modulation

# Check instrument options at startup (True or False). Default is False
check_options: False

# If check_options is set to True, define command for getting options
option_cmd: *OPT?

# If check_options is set to True, supply valid id option strings for each option
#TODO
# option_id_1: UNT
# option_id_2: UNU
# option_id_3: UNW
# option_id_4: UNX
# option_id_5: UNY
# option_id_6: 016
# option_id_7: 015
# option_id_8: H18
# option_id_9: 1E6



# General VISA settings for the instrument.
[VISA settings]

# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa = True

# Reset the interface (not the instrument) at startup (True or False).  Default is False
reset: False

# Time (in seconds) before the timing out while waiting for an instrument response. Default is 5
timeout: 5

# Query instrument errors (True or False).  If True, every command sent to the device will
# be followed by an error query.  This is useful when testing new setups, but may degrade
# performance by slowing down the instrument communication.
query_instr_errors: False

# Bit mask for checking status byte errors (default is 255, include all errors)
# The bits signal the following errors:
# 0: Operation
# 1: Request control
# 2: Query error
# 3: Device error
# 4: Execution error
# 5: Command error
# 6: User request
# 7: Power on
error_bit_mask: 255

# SCPI string to be used when querying for instrument error messages
error_cmd: :SYST:SERR?

# Initialization commands are sent to the instrument when starting the driver
# *RST will reset the device, *CLS clears the interface
#TODO
init:

# Final commands sent to the instrument when closing the driver
final:


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
##############
# General Settings #
#############
[A - Frequency]
label: Frequency
unit: Hz
datatype: DOUBLE
def_value: 5.0E9
set_cmd: :SOUR1:FREQ
section: RF A


[A - Power]
label: Power
unit: dBm
datatype: DOUBLE
def_value: -20
set_cmd: :SOUR1:POW:POW
section: RF A


[A - Phase]
label: Phase
unit: deg
datatype: DOUBLE
def_value: 0
low_lim: -720
high_lim: 720
#set_cmd: :SOUR1:PHAS <*> DEG
#get_cmd: :SOUR1:PHAS?
set_cmd: :SOUR1:PHAS
section: RF A

[A - Mode]
label: Mode
tooltip: "This allows you to optimize the RF output signal for applications where improved harmonic distortion or improved wideband noise is required"
datatype: COMBO
combo_def_1: Normal
combo_def_2: Low Noise
combo_def_3: Low Distortion
cmd_def_1: NORM
cmd_def_2: LOWN
cmd_def_3: LOWD
set_cmd: :SOUR1:POW:LMOD
section: RF A

[A - Automatic levelling control (ALC)]
label: Automatic levelling control (ALC)
datatype: COMBO
combo_def_1: Auto
combo_def_2: Off (Table)
combo_def_3: On
combo_def_4: Table & On
combo_def_5: Sample & On
combo_def_6: Off (Sample & Hold)
cmd_def_1: AUTO
cmd_def_2: OFFT
cmd_def_3: ON
cmd_def_4: ONT
cmd_def_5: ONS
cmd_def_6: OFF
def_value: Auto
set_cmd: :SOUR1:POW:ALC
section: RF A

[A - Output]
label: Output
datatype: BOOLEAN
def_value: False
set_cmd: :OUTP1
section: RF A


#####################
# Pulse Modulation #
###################

[A - Pulse modulation]
label: Pulse modulation
datatype: BOOLEAN
def_value: False
set_cmd: :SOUR1:PULM:STAT
group: Modulation
section: RF A

[A - Pulse modulation source]
label: Pulse modulation source
datatype: COMBO
def_value: Internal
combo_def_1: Internal
combo_def_2: External
cmd_def_1: INT
cmd_def_2: EXT
state_quant: A - Pulse modulation
state_value: True
group: Modulation
set_cmd: :SOUR1:PULM:SOUR
section: RF A

[A - Int. pulse modulation]
label: Int. pulse modulation
datatype: COMBO
def_value: Ext. triggered
combo_def_1: Auto
combo_def_2: Ext. triggered
combo_def_3: Ext. gated
combo_def_4: Ext. single
cmd_def_1: AUTO
cmd_def_2: EXT
cmd_def_3: EGAT
cmd_def_4: ESIN
group: Modulation
state_quant: A - Pulse modulation source
state_value_1: Internal
set_cmd: :SOUR1:PULM:TRIG:MODE
section: RF A

[A - Pulse delay]
label: Pulse delay
unit: s
datatype: DOUBLE
def_value: 100E-9
group:  Modulation 
state_quant: A - Int. pulse modulation
state_value_1: Ext. triggered
state_value_2: Ext. gated
state_value_3: Ext. single
set_cmd: :SOUR1:PULM:DEL
section: RF A


[A - Pulse width]
label: Pulse width
unit: s
datatype: DOUBLE
def_value: 500E-9
low_lim: 20e-9
high_lim: 100
group: Modulation
state_quant: A - Pulse modulation source
state_value_1: Internal
set_cmd: :SOUR1:PULM:WIDT
section: RF A


[A - Pulse period]
label: Pulse period
unit: s
datatype: DOUBLE
def_value: 1E-3
low_lim: 20e-9
high_lim: 100
group:  Modulation 
state_quant: A - Int. pulse modulation
state_value_1: Auto
state_value_2: Ext. gated
set_cmd: :SOUR1:PULM:PER
section: RF A


[A - Pulse polarity]
label: Pulse polarity
datatype: COMBO
def_value: Normal
combo_def_1: Normal
combo_def_2: Inverted
cmd_def_1: NORM
cmd_def_2: INV
state_quant: A - Pulse modulation source
state_value_1: External
group: Modulation 
set_cmd: :SOUR1:PULM:POL
section: RF A

#############
# I/Q Modulation #
############

[A - I/Q modulation]
label: I/Q modulation
datatype: BOOLEAN
def_value: False
set_cmd: :SOUR1:IQ:STAT
group: I/Q Mixer
section: RF A

[A - I/Q wideband]
label: I/Q wideband
datatype: BOOLEAN
tooltip: This setting automatically optimizes the settings for wideband modulation signals (>5 MHz, State ON)
def_value: True
set_cmd: :SOUR1:IQ:WBST
group: I/Q Mixer
section: RF A

[A - I/Q Adjustments]
label: I/Q Adjustments
datatype: BOOLEAN
def_value: True
state_quant: A - I/Q modulation
state_value: True
set_cmd: :SOUR1:IQ:IMP:STAT
group: I/Q Mixer
section: RF A

[A - I offset]
label: I offset
unit: %
datatype: DOUBLE
low_lim: -10
high_lim: 10
def_value: 0E-3
state_quant: A - I/Q Adjustments
state_value: True
#set_cmd: :SOUR1:IQ:IMP:LEAK:I <*> PCT
#get_cmd: :SOUR1:IQ:IMP:LEAK:I?
set_cmd: :SOUR1:IQ:IMP:LEAK:I
group: I/Q Mixer
section: RF A

[A - Q offset]
label: Q offset
unit: %
datatype: DOUBLE
low_lim: -10
high_lim: 10
def_value: 0E-3
state_quant: A - I/Q Adjustments
state_value: True
#set_cmd: :SOUR1:IQ:IMP:LEAK:Q <*> PCT
#get_cmd: :SOUR1:IQ:IMP:LEAK:Q?
set_cmd: :SOUR1:IQ:IMP:LEAK:Q
group: I/Q Mixer
section: RF A

[A - Gain imbalance]
label: Gain imbalance
unit: dB
datatype: DOUBLE
low_lim: -4
high_lim: 4
def_value: 0
state_quant: A - I/Q Adjustments
state_value: True
#set_cmd: :SOUR1:IQ:IMP:IQR <*> dB
#get_cmd: :SOUR1:IQ:IMP:IQR?
set_cmd: :SOUR1:IQ:IMP:IQR
group: I/Q Mixer
section: RF A

[A - Quadrature offset]
label: Quadrature offset
unit: deg
datatype: DOUBLE
low_lim: -30
high_lim: 30
def_value: 0
state_quant: A - I/Q Adjustments
state_value: True
set_cmd: :SOUR1:IQ:IMP:QUAD:ANGL
group: I/Q Mixer
section: RF A

[A - Optimization mode]
label: Optimization mode
datatype: COMBO
combo_def_1: Fast
combo_def_2: High Quality Table
combo_def_3: High Quality
cmd_def_1: FAST
cmd_def_2: QHT
cmd_def_3: QHIG
state_quant: A - I/Q Adjustments
state_value: True
set_cmd: :SOUR1:BB:IMP:OPT:MODE
group: I/Q Mixer
section: RF A

[A - Calibrate IQ at current frequency]
label: Calibrate IQ at current frequency
datatype: BUTTON
state_quant: A - I/Q Adjustments
state_value: True
set_cmd: :CAL1:IQM:LOC
group: I/Q Mixer
section: RF A

##############
# General Settings #
#############
[B - Frequency]
label: Frequency
unit: Hz
datatype: DOUBLE
def_value: 5.0E9
set_cmd: :SOUR2:FREQ
section: RF B


[B - Power]
label: Power
unit: dBm
datatype: DOUBLE
def_value: -20
set_cmd: :SOUR2:POW:POW
section: RF B


[B - Phase]
label: Phase
unit: deg
datatype: DOUBLE
def_value: 0
low_lim: -720
high_lim: 720
#set_cmd: :SOUR2:PHAS <*> DEG
#get_cmd: :SOUR2:PHAS?
set_cmd: :SOUR2:PHAS
section: RF B

[B - Mode]
label: Mode
tooltip: "This allows you to optimize the RF output signal for applications where improved harmonic distortion or improved wideband noise is required"
datatype: COMBO
combo_def_1: Normal
combo_def_2: Low Noise
combo_def_3: Low Distortion
cmd_def_1: NORM
cmd_def_2: LOWN
cmd_def_3: LOWD
set_cmd: :SOUR2:POW:LMOD
section: RF B

[B - Automatic levelling control (ALC)]
label: Automatic levelling control (ALC)
datatype: COMBO
combo_def_1: Auto
combo_def_2: Off (Table)
combo_def_3: On
combo_def_4: Table & On
combo_def_5: Sample & On
combo_def_6: Off (Sample & Hold)
cmd_def_1: AUTO
cmd_def_2: OFFT
cmd_def_3: ON
cmd_def_4: ONT
cmd_def_5: ONS
cmd_def_6: OFF
def_value: Auto
set_cmd: :SOUR2:POW:ALC
section: RF B

[B - Output]
label: Output
datatype: BOOLEAN
def_value: False
set_cmd: :OUTP2
section: RF B


#####################
# Pulse Modulation #
###################

[B - Pulse modulation]
label: Pulse modulation
datatype: BOOLEAN
def_value: False
set_cmd: :SOUR2:PULM:STAT
group: Modulation
section: RF B

[B - Pulse modulation source]
label: Pulse modulation source
datatype: COMBO
def_value: Internal
combo_def_1: Internal
combo_def_2: External
cmd_def_1: INT
cmd_def_2: EXT
state_quant: B - Pulse modulation
state_value: True
group: Modulation
set_cmd: :SOUR2:PULM:SOUR
section: RF B

[B - Int. pulse modulation]
label: Int. pulse modulation
datatype: COMBO
def_value: Ext. triggered
combo_def_1: Auto
combo_def_2: Ext. triggered
combo_def_3: Ext. gated
combo_def_4: Ext. single
cmd_def_1: AUTO
cmd_def_2: EXT
cmd_def_3: EGAT
cmd_def_4: ESIN
group: Modulation
state_quant: B - Pulse modulation source
state_value_1: Internal
set_cmd: :SOUR2:PULM:TRIG:MODE
section: RF B

[B - Pulse delay]
label: Pulse delay
unit: s
datatype: DOUBLE
def_value: 100E-9
group:  Modulation 
state_quant: B - Int. pulse modulation
state_value_1: Ext. triggered
state_value_2: Ext. gated
state_value_3: Ext. single
set_cmd: :SOUR2:PULM:DEL
section: RF B


[B - Pulse width]
label: Pulse width
unit: s
datatype: DOUBLE
def_value: 500E-9
low_lim: 20e-9
high_lim: 100
group: Modulation
state_quant: B - Pulse modulation source
state_value_1: Internal
set_cmd: :SOUR2:PULM:WIDT
section: RF B


[B - Pulse period]
label: Pulse period
unit: s
datatype: DOUBLE
def_value: 1E-3
low_lim: 20e-9
high_lim: 100
group:  Modulation 
state_quant: B - Int. pulse modulation
state_value_1: Auto
state_value_2: Ext. gated
set_cmd: :SOUR2:PULM:PER
section: RF B


[B - Pulse polarity]
label: Pulse polarity
datatype: COMBO
def_value: Normal
combo_def_1: Normal
combo_def_2: Inverted
cmd_def_1: NORM
cmd_def_2: INV
state_quant: B - Pulse modulation source
state_value_1: External
group: Modulation 
set_cmd: :SOUR2:PULM:POL
section: RF B

#############
# I/Q Modulation #
############

[B - I/Q modulation]
label: I/Q modulation
datatype: BOOLEAN
def_value: False
set_cmd: :SOUR2:IQ:STAT
group: I/Q Mixer
section: RF B

[B - I/Q wideband]
label: I/Q wideband
datatype: BOOLEAN
tooltip: This setting automatically optimizes the settings for wideband modulation signals (>5 MHz, State ON)
def_value: True
set_cmd: :SOUR2:IQ:WBST
group: I/Q Mixer
section: RF B

[B - I/Q Adjustments]
label: I/Q Adjustments
datatype: BOOLEAN
def_value: True
state_quant: B - I/Q modulation
state_value: True
set_cmd: :SOUR2:IQ:IMP:STAT
group: I/Q Mixer
section: RF B

[B - I offset]
label: I offset
unit: %
datatype: DOUBLE
low_lim: -10
high_lim: 10
def_value: 0E-3
state_quant: B - I/Q Adjustments
state_value: True
#set_cmd: :SOUR2:IQ:IMP:LEAK:I <*> PCT
#get_cmd: :SOUR2:IQ:IMP:LEAK:I?
set_cmd: :SOUR2:IQ:IMP:LEAK:I
group: I/Q Mixer
section: RF B

[B - Q offset]
label: Q offset
unit: %
datatype: DOUBLE
low_lim: -10
high_lim: 10
def_value: 0E-3
state_quant: B - I/Q Adjustments
state_value: True
#set_cmd: :SOUR2:IQ:IMP:LEAK:Q <*> PCT
#get_cmd: :SOUR2:IQ:IMP:LEAK:Q?
set_cmd: :SOUR2:IQ:IMP:LEAK:Q
group: I/Q Mixer
section: RF B

[B - Gain imbalance]
label: Gain imbalance
unit: dB
datatype: DOUBLE
low_lim: -4
high_lim: 4
def_value: 0
state_quant: B - I/Q Adjustments
state_value: True
#set_cmd: :SOUR2:IQ:IMP:IQR <*> dB
#get_cmd: :SOUR2:IQ:IMP:IQR?
set_cmd: :SOUR2:IQ:IMP:IQR
group: I/Q Mixer
section: RF B

[B - Quadrature offset]
label: Quadrature offset
unit: deg
datatype: DOUBLE
low_lim: -30
high_lim: 30
def_value: 0
state_quant: B - I/Q Adjustments
state_value: True
set_cmd: :SOUR2:IQ:IMP:QUAD:ANGL
group: I/Q Mixer
section: RF B

[B - Optimization mode]
label: Optimization mode
datatype: COMBO
combo_def_1: Fast
combo_def_2: High Quality Table
combo_def_3: High Quality
cmd_def_1: FAST
cmd_def_2: QHT
cmd_def_3: QHIG
state_quant: B - I/Q Adjustments
state_value: True
set_cmd: :SOUR2:BB:IMP:OPT:MODE
group: I/Q Mixer
section: RF B

[B - Calibrate IQ at current frequency]
label: Calibrate IQ at current frequency
datatype: BUTTON
state_quant: B - I/Q Adjustments
state_value: True
set_cmd: :CAL2:IQM:LOC
group: I/Q Mixer
section: RF B

###############
# Oscillator Sources ##
###############
[LO Source]
label: LO Source
tooltip: Selects the mode of the local oscillator coupling
datatype: COMBO
combo_def_1: A&B Internal
combo_def_2: A External & B Internal
combo_def_3: A Internal & A -> B Coupled
combo_def_4: A External & A -> B Coupled
combo_def_5: A Internal & B RF Off
combo_def_6: A External & B RF Off
combo_def_7: A RF Off & B External
cmd_def_1: INT
cmd_def_2: EXT
cmd_def_3: COUP
cmd_def_4: ECO
cmd_def_5: BOFF
cmd_def_6: EBOF
cmd_def_7: AOFF
set_cmd: :SOUR:FREQ:LOSC:MODE
group: Oscillator Sources
section: Local Oscillator

[LO Output]
label: LO Output
tooltip: Activates the LO output in the second path
datatype: BOOLEAN
def_value: False
set_cmd: :SOUR:FREQ:LOSC:OUTP:STAT
group: Oscillator Sources
section: Local Oscillator
