[General settings]
name: Tektronix AWG5200
version: 1.3.0
driver_path: Tektronix_AWG5200
interface: TCPIP
support_hardware_loop: True
support_arm: False

[Model and options]
check_model: True
check_options: True
option_cmd: *OPT?
model_str_1: 5208
model_id_1: TEKTRONIX,AWG5208
model_str_2: 5204
model_id_2: TEKTRONIX,AWG5204
model_str_3: 5202
model_id_3: TEKTRONIX,AWG5202
option_str_1: 2.5GS/s Sample Rate
option_id_1: 25
option_str_2: 5GS/s Sample Rate
option_id_2: 50
option_str_3: Sequencing
option_id_3: SEQ

[VISA settings]
use_visa: True
reset: True
query_instr_errors: False
error_bit_mask: 255
error_cmd: :SYST:ERR?
timeout: 60

[Reference]
datatype: COMBO
def_value: Internal
set_cmd: CLOC:SOUR
combo_def_1: Internal
cmd_def_1: INT
combo_def_2: Reference In, External 10MHz
cmd_def_2: EFIX
combo_def_3: Reference In, External Variable
cmd_def_3: EVAR
combo_def_4: Clock In, External Variable
cmd_def_4: EXT
section: Clock

[Ext. clock frequency]
datatype: DOUBLE
unit: Hz
def_value: 2500000000.0
low_lim: 2500000000.0
high_lim: 5000000000.0
set_cmd: CLOC:ECL:FREQ
state_quant: Reference
state_value_1: Clock In, External Variable
section: Clock

[Ext. reference frequency]
datatype: DOUBLE
unit: Hz
def_value: 35000000.0
low_lim: 35000000.0
high_lim: 250000000.0
set_cmd: CLOC:EREF:FREQ
state_quant: Reference
state_value_1: Reference In, External Variable
section: Clock

[Jitter reduction]
datatype: BOOLEAN
def_value: False
set_cmd: CLOC:JITT
state_quant: Reference
state_value_1: Internal
state_value_2: Reference In, External 10MHz
state_value_3: Reference In, External Variable
section: Clock

[Clock out]
datatype: BOOLEAN
def_value: False
set_cmd: CLOC:OUTP
state_quant: Reference
state_value_1: Internal
state_value_2: Reference In, External 10MHz
state_value_3: Reference In, External Variable
section: Clock

[Sample rate]
datatype: DOUBLE
unit: Hz
def_value: 2500000000.0
low_lim: 298
show_in_measurement_dlg: True
set_cmd: CLOC:SRAT
state_quant: Reference
state_value_1: Internal
state_value_2: Reference In, External 10MHz
state_value_3: Reference In, External Variable
section: Clock

[Internal Trigger - interval]
datatype: DOUBLE
label: interval
unit: s
def_value: 0.001
low_lim: 1e-06
high_lim: 10
show_in_measurement_dlg: True
set_cmd: TRIG:INT
section: Trigger
group: Internal trigger

[Trigger A - level]
datatype: DOUBLE
label: level
unit: V
def_value: 1.4
low_lim: -5
high_lim: 5
set_cmd: TRIG:LEV <*>,ATR
get_cmd: TRIG:LEV? ATR
section: Trigger
group: External trigger input A

[Trigger A - slope]
datatype: COMBO
label: slope
def_value: Positive
set_cmd: TRIG:SLOP <*>,ATR
get_cmd: TRIG:SLOP? ATR
combo_def_1: Positive
cmd_def_1: POS
combo_def_2: Negative
cmd_def_2: NEG
section: Trigger
group: External trigger input A

[Trigger A - impedance]
datatype: COMBO
label: impedance
def_value: 50 Ohm
set_cmd: TRIG:IMP <*>,ATR
get_cmd: TRIG:IMP? ATR
combo_def_1: 50 Ohm
cmd_def_1: 50
combo_def_2: 1 kOhm
cmd_def_2: 1000
section: Trigger
group: External trigger input A

[Trigger A - Send Trig]
datatype: BUTTON
label: Send Trig
set_cmd: TRIG ATR
section: Trigger
group: External trigger input A

[Trigger B - level]
datatype: DOUBLE
label: level
unit: V
def_value: 1.4
low_lim: -5
high_lim: 5
set_cmd: TRIG:LEV <*>,BTR
get_cmd: TRIG:LEV? BTR
section: Trigger
group: External trigger input B

[Trigger B - slope]
datatype: COMBO
label: slope
def_value: Positive
set_cmd: TRIG:SLOP <*>,BTR
get_cmd: TRIG:SLOP? BTR
combo_def_1: Positive
cmd_def_1: POS
combo_def_2: Negative
cmd_def_2: NEG
section: Trigger
group: External trigger input B

[Trigger B - impedance]
datatype: COMBO
label: impedance
def_value: 50 Ohm
set_cmd: TRIG:IMP <*>,BTR
get_cmd: TRIG:IMP? BTR
combo_def_1: 50 Ohm
cmd_def_1: 50
combo_def_2: 1 kOhm
cmd_def_2: 1000
section: Trigger
group: External trigger input B

[Trigger B - Send Trig]
datatype: BUTTON
label: Send Trig
set_cmd: TRIG BTR
section: Trigger
group: External trigger input B

[Run]
datatype: BUTTON
tooltip: Set instrument to run mode
section: Control

[Stop]
datatype: BUTTON
tooltip: Set instrument to stop mode
section: Control

[All output off]
datatype: BOOLEAN
def_value: False
set_cmd: OUTP:OFF
section: Control

[Sequence - Trigger source]
datatype: COMBO
label: Trigger Source
def_value: Internal
combo_def_1: Internal
cmd_def_1: ITR
combo_def_2: A
cmd_def_2: ATR
combo_def_3: B
cmd_def_3: BTR
section: Sequence

[Ch1 - Output]
datatype: BOOLEAN
label: Output
def_value: False
set_cmd: OUTP1
section: Channel 1
group: Channel

[Ch1 - Run mode]
datatype: COMBO
label: Run mode
def_value: Triggered
set_cmd: SOUR1:RMODE
combo_def_1: Continuous
cmd_def_1: CONT
combo_def_2: Triggered
cmd_def_2: TRIG
combo_def_3: Triggered Continuous
cmd_def_3: TCON
combo_def_4: Gated
cmd_def_4: GAT
section: Channel 1
group: Channel

[Ch1 - Trigger Source]
datatype: COMBO
label: Trigger Source
def_value: A
set_cmd: SOUR1:TINP
state_quant: Ch1 - Run mode
state_value_1: Triggered
state_value_2: Triggered Continuous
combo_def_1: A
cmd_def_1: ATR
combo_def_2: B
cmd_def_2: BTR
combo_def_3: Internal
cmd_def_3: ITR
section: Channel 1
group: Channel

[Ch1 - Trigger Source Gated]
datatype: COMBO
label: Trigger Source
def_value: A
set_cmd: SOUR1:TINP
state_quant: Ch1 - Run mode
state_value_1: Gated
combo_def_1: A
cmd_def_1: ATR
combo_def_2: B
cmd_def_2: BTR
section: Channel 1
group: Channel

[Ch1 - Range]
datatype: DOUBLE
label: Range
unit: V
def_value: 0.5
low_lim: 0.025
high_lim: 0.75
set_cmd: SOUR1:VOLT
section: Channel 1
group: Channel

[Ch1 - Offset]
datatype: DOUBLE
label: Offset
unit: V
def_value: 0
low_lim: -2
high_lim: 2
set_cmd: :SOUR1:VOLT:OFFS
section: Channel 1
group: Channel

[Ch1 - Skew]
datatype: DOUBLE
label: Skew
unit: s
def_value: 0
tooltip: Minimum step is 0.5 ps
low_lim: -2e-09
high_lim: 2e-09
set_cmd: SOUR1:SKEW
section: Channel 1
group: Channel

[Ch1 - DAC]
datatype: COMBO
label: DAC resolution
def_value: 16 bit DAC + 0 marker
set_cmd: SOUR1:DAC:RES
combo_def_1: 16 bit DAC + 0 marker
cmd_def_1: 16
combo_def_2: 15 bit DAC + 1 marker
cmd_def_2: 15
combo_def_3: 14 bit DAC + 2 marker
cmd_def_3: 14
combo_def_4: 13 bit DAC + 3 marker
cmd_def_4: 13
combo_def_5: 12 bit DAC + 4 marker
cmd_def_5: 12
section: Channel 1
group: Channel

[Ch 1]
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
group: Output
permission: WRITE
show_in_measurement_dlg: True
section: Channel 1

[Ch1 - Marker 1 High]
datatype: DOUBLE
label: Marker 1 High
unit: V
def_value: 1.0
low_lim: -0.3
high_lim: 1.75
set_cmd: SOUR1:MARK1:VOLT:HIGH
section: Channel 1
group: Marker 1

[Ch1 - Marker 1 Low]
datatype: DOUBLE
label: Marker 1 Low
unit: V
def_value: 0
low_lim: -0.5
high_lim: 1.55
set_cmd: SOUR1:MARK1:VOLT:LOW
section: Channel 1
group: Marker 1

[Ch1 - Marker 1 Delay]
datatype: DOUBLE
label: Marker 1 Delay
unit: s
def_value: 0
low_lim: -3e-09
high_lim: 3e-09
set_cmd: SOUR1:MARK1:DEL
section: Channel 1
group: Marker 1

[Ch 1 - Marker 1]
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
group: Output
permission: WRITE
section: Channel 1

[Ch1 - Marker 2 High]
datatype: DOUBLE
label: Marker 2 High
unit: V
def_value: 1.0
low_lim: -0.3
high_lim: 1.75
set_cmd: SOUR1:MARK2:VOLT:HIGH
section: Channel 1
group: Marker 2

[Ch1 - Marker 2 Low]
datatype: DOUBLE
label: Marker 2 Low
unit: V
def_value: 0
low_lim: -0.5
high_lim: 1.55
set_cmd: SOUR1:MARK2:VOLT:LOW
section: Channel 1
group: Marker 2

[Ch1 - Marker 2 Delay]
datatype: DOUBLE
label: Marker 2 Delay
unit: s
def_value: 0
low_lim: -3e-09
high_lim: 3e-09
set_cmd: SOUR1:MARK2:DEL
section: Channel 1
group: Marker 2

[Ch 1 - Marker 2]
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
group: Output
permission: WRITE
section: Channel 1

[Ch1 - Marker 3 High]
datatype: DOUBLE
label: Marker 3 High
unit: V
def_value: 1.0
low_lim: -0.3
high_lim: 1.75
set_cmd: SOUR1:MARK3:VOLT:HIGH
section: Channel 1
group: Marker 3

[Ch1 - Marker 3 Low]
datatype: DOUBLE
label: Marker 3 Low
unit: V
def_value: 0
low_lim: -0.5
high_lim: 1.55
set_cmd: SOUR1:MARK3:VOLT:LOW
section: Channel 1
group: Marker 3

[Ch1 - Marker 3 Delay]
datatype: DOUBLE
label: Marker 3 Delay
unit: s
def_value: 0
low_lim: -3e-09
high_lim: 3e-09
set_cmd: SOUR1:MARK3:DEL
section: Channel 1
group: Marker 3

[Ch 1 - Marker 3]
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
group: Output
permission: WRITE
section: Channel 1

[Ch1 - Marker 4 High]
datatype: DOUBLE
label: Marker 4 High
unit: V
def_value: 1.0
low_lim: -0.3
high_lim: 1.75
set_cmd: SOUR1:MARK4:VOLT:HIGH
section: Channel 1
group: Marker 4

[Ch1 - Marker 4 Low]
datatype: DOUBLE
label: Marker 4 Low
unit: V
def_value: 0
low_lim: -0.5
high_lim: 1.55
set_cmd: SOUR1:MARK4:VOLT:LOW
section: Channel 1
group: Marker 4

[Ch1 - Marker 4 Delay]
datatype: DOUBLE
label: Marker 4 Delay
unit: s
def_value: 0
low_lim: -3e-09
high_lim: 3e-09
set_cmd: SOUR1:MARK4:DEL
section: Channel 1
group: Marker 4

[Ch 1 - Marker 4]
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
group: Output
permission: WRITE
section: Channel 1

[Ch2 - Output]
datatype: BOOLEAN
label: Output
def_value: False
set_cmd: OUTP2
section: Channel 2
group: Channel

[Ch2 - Run mode]
datatype: COMBO
label: Run mode
def_value: Triggered
set_cmd: SOUR2:RMODE
combo_def_1: Continuous
cmd_def_1: CONT
combo_def_2: Triggered
cmd_def_2: TRIG
combo_def_3: Triggered Continuous
cmd_def_3: TCON
combo_def_4: Gated
cmd_def_4: GAT
section: Channel 2
group: Channel

[Ch2 - Trigger Source]
datatype: COMBO
label: Trigger Source
def_value: A
set_cmd: SOUR2:TINP
state_quant: Ch2 - Run mode
state_value_1: Triggered
state_value_2: Triggered Continuous
combo_def_1: A
cmd_def_1: ATR
combo_def_2: B
cmd_def_2: BTR
combo_def_3: Internal
cmd_def_3: ITR
section: Channel 2
group: Channel

[Ch2 - Trigger Source Gated]
datatype: COMBO
label: Trigger Source
def_value: A
set_cmd: SOUR2:TINP
state_quant: Ch2 - Run mode
state_value_1: Gated
combo_def_1: A
cmd_def_1: ATR
combo_def_2: B
cmd_def_2: BTR
section: Channel 2
group: Channel

[Ch2 - Range]
datatype: DOUBLE
label: Range
unit: V
def_value: 0.5
low_lim: 0.025
high_lim: 0.75
set_cmd: SOUR2:VOLT
section: Channel 2
group: Channel

[Ch2 - Offset]
datatype: DOUBLE
label: Offset
unit: V
def_value: 0
low_lim: -2
high_lim: 2
set_cmd: :SOUR2:VOLT:OFFS
section: Channel 2
group: Channel

[Ch2 - Skew]
datatype: DOUBLE
label: Skew
unit: s
def_value: 0
tooltip: Minimum step is 0.5 ps
low_lim: -2e-09
high_lim: 2e-09
set_cmd: SOUR2:SKEW
section: Channel 2
group: Channel

[Ch2 - DAC]
datatype: COMBO
label: DAC resolution
def_value: 16 bit DAC + 0 marker
set_cmd: SOUR2:DAC:RES
combo_def_1: 16 bit DAC + 0 marker
cmd_def_1: 16
combo_def_2: 15 bit DAC + 1 marker
cmd_def_2: 15
combo_def_3: 14 bit DAC + 2 marker
cmd_def_3: 14
combo_def_4: 13 bit DAC + 3 marker
cmd_def_4: 13
combo_def_5: 12 bit DAC + 4 marker
cmd_def_5: 12
section: Channel 2
group: Channel

[Ch 2]
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
group: Output
permission: WRITE
show_in_measurement_dlg: True
section: Channel 2

[Ch2 - Marker 1 High]
datatype: DOUBLE
label: Marker 1 High
unit: V
def_value: 1.0
low_lim: -0.3
high_lim: 1.75
set_cmd: SOUR2:MARK1:VOLT:HIGH
section: Channel 2
group: Marker 1

[Ch2 - Marker 1 Low]
datatype: DOUBLE
label: Marker 1 Low
unit: V
def_value: 0
low_lim: -0.5
high_lim: 1.55
set_cmd: SOUR2:MARK1:VOLT:LOW
section: Channel 2
group: Marker 1

[Ch2 - Marker 1 Delay]
datatype: DOUBLE
label: Marker 1 Delay
unit: s
def_value: 0
low_lim: -3e-09
high_lim: 3e-09
set_cmd: SOUR2:MARK1:DEL
section: Channel 2
group: Marker 1

[Ch 2 - Marker 1]
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
group: Output
permission: WRITE
section: Channel 2

[Ch2 - Marker 2 High]
datatype: DOUBLE
label: Marker 2 High
unit: V
def_value: 1.0
low_lim: -0.3
high_lim: 1.75
set_cmd: SOUR2:MARK2:VOLT:HIGH
section: Channel 2
group: Marker 2

[Ch2 - Marker 2 Low]
datatype: DOUBLE
label: Marker 2 Low
unit: V
def_value: 0
low_lim: -0.5
high_lim: 1.55
set_cmd: SOUR2:MARK2:VOLT:LOW
section: Channel 2
group: Marker 2

[Ch2 - Marker 2 Delay]
datatype: DOUBLE
label: Marker 2 Delay
unit: s
def_value: 0
low_lim: -3e-09
high_lim: 3e-09
set_cmd: SOUR2:MARK2:DEL
section: Channel 2
group: Marker 2

[Ch 2 - Marker 2]
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
group: Output
permission: WRITE
section: Channel 2

[Ch2 - Marker 3 High]
datatype: DOUBLE
label: Marker 3 High
unit: V
def_value: 1.0
low_lim: -0.3
high_lim: 1.75
set_cmd: SOUR2:MARK3:VOLT:HIGH
section: Channel 2
group: Marker 3

[Ch2 - Marker 3 Low]
datatype: DOUBLE
label: Marker 3 Low
unit: V
def_value: 0
low_lim: -0.5
high_lim: 1.55
set_cmd: SOUR2:MARK3:VOLT:LOW
section: Channel 2
group: Marker 3

[Ch2 - Marker 3 Delay]
datatype: DOUBLE
label: Marker 3 Delay
unit: s
def_value: 0
low_lim: -3e-09
high_lim: 3e-09
set_cmd: SOUR2:MARK3:DEL
section: Channel 2
group: Marker 3

[Ch 2 - Marker 3]
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
group: Output
permission: WRITE
section: Channel 2

[Ch2 - Marker 4 High]
datatype: DOUBLE
label: Marker 4 High
unit: V
def_value: 1.0
low_lim: -0.3
high_lim: 1.75
set_cmd: SOUR2:MARK4:VOLT:HIGH
section: Channel 2
group: Marker 4

[Ch2 - Marker 4 Low]
datatype: DOUBLE
label: Marker 4 Low
unit: V
def_value: 0
low_lim: -0.5
high_lim: 1.55
set_cmd: SOUR2:MARK4:VOLT:LOW
section: Channel 2
group: Marker 4

[Ch2 - Marker 4 Delay]
datatype: DOUBLE
label: Marker 4 Delay
unit: s
def_value: 0
low_lim: -3e-09
high_lim: 3e-09
set_cmd: SOUR2:MARK4:DEL
section: Channel 2
group: Marker 4

[Ch 2 - Marker 4]
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
group: Output
permission: WRITE
section: Channel 2

[Ch3 - Output]
datatype: BOOLEAN
label: Output
def_value: False
set_cmd: OUTP3
model_value_1: 5204
model_value_2: 5208
section: Channel 3
group: Channel

[Ch3 - Run mode]
datatype: COMBO
label: Run mode
def_value: Triggered
set_cmd: SOUR3:RMODE
model_value_1: 5204
model_value_2: 5208
combo_def_1: Continuous
cmd_def_1: CONT
combo_def_2: Triggered
cmd_def_2: TRIG
combo_def_3: Triggered Continuous
cmd_def_3: TCON
combo_def_4: Gated
cmd_def_4: GAT
section: Channel 3
group: Channel

[Ch3 - Trigger Source]
datatype: COMBO
label: Trigger Source
def_value: A
set_cmd: SOUR3:TINP
state_quant: Ch3 - Run mode
state_value_1: Triggered
state_value_2: Triggered Continuous
model_value_1: 5204
model_value_2: 5208
combo_def_1: A
cmd_def_1: ATR
combo_def_2: B
cmd_def_2: BTR
combo_def_3: Internal
cmd_def_3: ITR
section: Channel 3
group: Channel

[Ch3 - Trigger Source Gated]
datatype: COMBO
label: Trigger Source
def_value: A
set_cmd: SOUR3:TINP
state_quant: Ch3 - Run mode
state_value_1: Gated
model_value_1: 5204
model_value_2: 5208
combo_def_1: A
cmd_def_1: ATR
combo_def_2: B
cmd_def_2: BTR
section: Channel 3
group: Channel

[Ch3 - Range]
datatype: DOUBLE
label: Range
unit: V
def_value: 0.5
low_lim: 0.025
high_lim: 0.75
set_cmd: SOUR3:VOLT
model_value_1: 5204
model_value_2: 5208
section: Channel 3
group: Channel

[Ch3 - Offset]
datatype: DOUBLE
label: Offset
unit: V
def_value: 0
low_lim: -2
high_lim: 2
set_cmd: :SOUR3:VOLT:OFFS
model_value_1: 5204
model_value_2: 5208
section: Channel 3
group: Channel

[Ch3 - Skew]
datatype: DOUBLE
label: Skew
unit: s
def_value: 0
tooltip: Minimum step is 0.5 ps
low_lim: -2e-09
high_lim: 2e-09
set_cmd: SOUR3:SKEW
model_value_1: 5204
model_value_2: 5208
section: Channel 3
group: Channel

[Ch3 - DAC]
datatype: COMBO
label: DAC resolution
def_value: 16 bit DAC + 0 marker
set_cmd: SOUR3:DAC:RES
model_value_1: 5204
model_value_2: 5208
combo_def_1: 16 bit DAC + 0 marker
cmd_def_1: 16
combo_def_2: 15 bit DAC + 1 marker
cmd_def_2: 15
combo_def_3: 14 bit DAC + 2 marker
cmd_def_3: 14
combo_def_4: 13 bit DAC + 3 marker
cmd_def_4: 13
combo_def_5: 12 bit DAC + 4 marker
cmd_def_5: 12
section: Channel 3
group: Channel

[Ch 3]
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
group: Output
permission: WRITE
show_in_measurement_dlg: True
model_value_1: 5204
model_value_2: 5208
section: Channel 3

[Ch3 - Marker 1 High]
datatype: DOUBLE
label: Marker 1 High
unit: V
def_value: 1.0
low_lim: -0.3
high_lim: 1.75
set_cmd: SOUR3:MARK1:VOLT:HIGH
model_value_1: 5204
model_value_2: 5208
section: Channel 3
group: Marker 1

[Ch3 - Marker 1 Low]
datatype: DOUBLE
label: Marker 1 Low
unit: V
def_value: 0
low_lim: -0.5
high_lim: 1.55
set_cmd: SOUR3:MARK1:VOLT:LOW
model_value_1: 5204
model_value_2: 5208
section: Channel 3
group: Marker 1

[Ch3 - Marker 1 Delay]
datatype: DOUBLE
label: Marker 1 Delay
unit: s
def_value: 0
low_lim: -3e-09
high_lim: 3e-09
set_cmd: SOUR3:MARK1:DEL
model_value_1: 5204
model_value_2: 5208
section: Channel 3
group: Marker 1

[Ch 3 - Marker 1]
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
group: Output
permission: WRITE
model_value_1: 5204
model_value_2: 5208
section: Channel 3

[Ch3 - Marker 2 High]
datatype: DOUBLE
label: Marker 2 High
unit: V
def_value: 1.0
low_lim: -0.3
high_lim: 1.75
set_cmd: SOUR3:MARK2:VOLT:HIGH
model_value_1: 5204
model_value_2: 5208
section: Channel 3
group: Marker 2

[Ch3 - Marker 2 Low]
datatype: DOUBLE
label: Marker 2 Low
unit: V
def_value: 0
low_lim: -0.5
high_lim: 1.55
set_cmd: SOUR3:MARK2:VOLT:LOW
model_value_1: 5204
model_value_2: 5208
section: Channel 3
group: Marker 2

[Ch3 - Marker 2 Delay]
datatype: DOUBLE
label: Marker 2 Delay
unit: s
def_value: 0
low_lim: -3e-09
high_lim: 3e-09
set_cmd: SOUR3:MARK2:DEL
model_value_1: 5204
model_value_2: 5208
section: Channel 3
group: Marker 2

[Ch 3 - Marker 2]
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
group: Output
permission: WRITE
model_value_1: 5204
model_value_2: 5208
section: Channel 3

[Ch3 - Marker 3 High]
datatype: DOUBLE
label: Marker 3 High
unit: V
def_value: 1.0
low_lim: -0.3
high_lim: 1.75
set_cmd: SOUR3:MARK3:VOLT:HIGH
model_value_1: 5204
model_value_2: 5208
section: Channel 3
group: Marker 3

[Ch3 - Marker 3 Low]
datatype: DOUBLE
label: Marker 3 Low
unit: V
def_value: 0
low_lim: -0.5
high_lim: 1.55
set_cmd: SOUR3:MARK3:VOLT:LOW
model_value_1: 5204
model_value_2: 5208
section: Channel 3
group: Marker 3

[Ch3 - Marker 3 Delay]
datatype: DOUBLE
label: Marker 3 Delay
unit: s
def_value: 0
low_lim: -3e-09
high_lim: 3e-09
set_cmd: SOUR3:MARK3:DEL
model_value_1: 5204
model_value_2: 5208
section: Channel 3
group: Marker 3

[Ch 3 - Marker 3]
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
group: Output
permission: WRITE
model_value_1: 5204
model_value_2: 5208
section: Channel 3

[Ch3 - Marker 4 High]
datatype: DOUBLE
label: Marker 4 High
unit: V
def_value: 1.0
low_lim: -0.3
high_lim: 1.75
set_cmd: SOUR3:MARK4:VOLT:HIGH
model_value_1: 5204
model_value_2: 5208
section: Channel 3
group: Marker 4

[Ch3 - Marker 4 Low]
datatype: DOUBLE
label: Marker 4 Low
unit: V
def_value: 0
low_lim: -0.5
high_lim: 1.55
set_cmd: SOUR3:MARK4:VOLT:LOW
model_value_1: 5204
model_value_2: 5208
section: Channel 3
group: Marker 4

[Ch3 - Marker 4 Delay]
datatype: DOUBLE
label: Marker 4 Delay
unit: s
def_value: 0
low_lim: -3e-09
high_lim: 3e-09
set_cmd: SOUR3:MARK4:DEL
model_value_1: 5204
model_value_2: 5208
section: Channel 3
group: Marker 4

[Ch 3 - Marker 4]
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
group: Output
permission: WRITE
model_value_1: 5204
model_value_2: 5208
section: Channel 3

[Ch4 - Output]
datatype: BOOLEAN
label: Output
def_value: False
set_cmd: OUTP4
model_value_1: 5204
model_value_2: 5208
section: Channel 4
group: Channel

[Ch4 - Run mode]
datatype: COMBO
label: Run mode
def_value: Triggered
set_cmd: SOUR4:RMODE
model_value_1: 5204
model_value_2: 5208
combo_def_1: Continuous
cmd_def_1: CONT
combo_def_2: Triggered
cmd_def_2: TRIG
combo_def_3: Triggered Continuous
cmd_def_3: TCON
combo_def_4: Gated
cmd_def_4: GAT
section: Channel 4
group: Channel

[Ch4 - Trigger Source]
datatype: COMBO
label: Trigger Source
def_value: A
set_cmd: SOUR4:TINP
state_quant: Ch4 - Run mode
state_value_1: Triggered
state_value_2: Triggered Continuous
model_value_1: 5204
model_value_2: 5208
combo_def_1: A
cmd_def_1: ATR
combo_def_2: B
cmd_def_2: BTR
combo_def_3: Internal
cmd_def_3: ITR
section: Channel 4
group: Channel

[Ch4 - Trigger Source Gated]
datatype: COMBO
label: Trigger Source
def_value: A
set_cmd: SOUR4:TINP
state_quant: Ch4 - Run mode
state_value_1: Gated
model_value_1: 5204
model_value_2: 5208
combo_def_1: A
cmd_def_1: ATR
combo_def_2: B
cmd_def_2: BTR
section: Channel 4
group: Channel

[Ch4 - Range]
datatype: DOUBLE
label: Range
unit: V
def_value: 0.5
low_lim: 0.025
high_lim: 0.75
set_cmd: SOUR4:VOLT
model_value_1: 5204
model_value_2: 5208
section: Channel 4
group: Channel

[Ch4 - Offset]
datatype: DOUBLE
label: Offset
unit: V
def_value: 0
low_lim: -2
high_lim: 2
set_cmd: :SOUR4:VOLT:OFFS
model_value_1: 5204
model_value_2: 5208
section: Channel 4
group: Channel

[Ch4 - Skew]
datatype: DOUBLE
label: Skew
unit: s
def_value: 0
tooltip: Minimum step is 0.5 ps
low_lim: -2e-09
high_lim: 2e-09
set_cmd: SOUR4:SKEW
model_value_1: 5204
model_value_2: 5208
section: Channel 4
group: Channel

[Ch4 - DAC]
datatype: COMBO
label: DAC resolution
def_value: 16 bit DAC + 0 marker
set_cmd: SOUR4:DAC:RES
model_value_1: 5204
model_value_2: 5208
combo_def_1: 16 bit DAC + 0 marker
cmd_def_1: 16
combo_def_2: 15 bit DAC + 1 marker
cmd_def_2: 15
combo_def_3: 14 bit DAC + 2 marker
cmd_def_3: 14
combo_def_4: 13 bit DAC + 3 marker
cmd_def_4: 13
combo_def_5: 12 bit DAC + 4 marker
cmd_def_5: 12
section: Channel 4
group: Channel

[Ch 4]
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
group: Output
permission: WRITE
show_in_measurement_dlg: True
model_value_1: 5204
model_value_2: 5208
section: Channel 4

[Ch4 - Marker 1 High]
datatype: DOUBLE
label: Marker 1 High
unit: V
def_value: 1.0
low_lim: -0.3
high_lim: 1.75
set_cmd: SOUR4:MARK1:VOLT:HIGH
model_value_1: 5204
model_value_2: 5208
section: Channel 4
group: Marker 1

[Ch4 - Marker 1 Low]
datatype: DOUBLE
label: Marker 1 Low
unit: V
def_value: 0
low_lim: -0.5
high_lim: 1.55
set_cmd: SOUR4:MARK1:VOLT:LOW
model_value_1: 5204
model_value_2: 5208
section: Channel 4
group: Marker 1

[Ch4 - Marker 1 Delay]
datatype: DOUBLE
label: Marker 1 Delay
unit: s
def_value: 0
low_lim: -3e-09
high_lim: 3e-09
set_cmd: SOUR4:MARK1:DEL
model_value_1: 5204
model_value_2: 5208
section: Channel 4
group: Marker 1

[Ch 4 - Marker 1]
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
group: Output
permission: WRITE
model_value_1: 5204
model_value_2: 5208
section: Channel 4

[Ch4 - Marker 2 High]
datatype: DOUBLE
label: Marker 2 High
unit: V
def_value: 1.0
low_lim: -0.3
high_lim: 1.75
set_cmd: SOUR4:MARK2:VOLT:HIGH
model_value_1: 5204
model_value_2: 5208
section: Channel 4
group: Marker 2

[Ch4 - Marker 2 Low]
datatype: DOUBLE
label: Marker 2 Low
unit: V
def_value: 0
low_lim: -0.5
high_lim: 1.55
set_cmd: SOUR4:MARK2:VOLT:LOW
model_value_1: 5204
model_value_2: 5208
section: Channel 4
group: Marker 2

[Ch4 - Marker 2 Delay]
datatype: DOUBLE
label: Marker 2 Delay
unit: s
def_value: 0
low_lim: -3e-09
high_lim: 3e-09
set_cmd: SOUR4:MARK2:DEL
model_value_1: 5204
model_value_2: 5208
section: Channel 4
group: Marker 2

[Ch 4 - Marker 2]
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
group: Output
permission: WRITE
model_value_1: 5204
model_value_2: 5208
section: Channel 4

[Ch4 - Marker 3 High]
datatype: DOUBLE
label: Marker 3 High
unit: V
def_value: 1.0
low_lim: -0.3
high_lim: 1.75
set_cmd: SOUR4:MARK3:VOLT:HIGH
model_value_1: 5204
model_value_2: 5208
section: Channel 4
group: Marker 3

[Ch4 - Marker 3 Low]
datatype: DOUBLE
label: Marker 3 Low
unit: V
def_value: 0
low_lim: -0.5
high_lim: 1.55
set_cmd: SOUR4:MARK3:VOLT:LOW
model_value_1: 5204
model_value_2: 5208
section: Channel 4
group: Marker 3

[Ch4 - Marker 3 Delay]
datatype: DOUBLE
label: Marker 3 Delay
unit: s
def_value: 0
low_lim: -3e-09
high_lim: 3e-09
set_cmd: SOUR4:MARK3:DEL
model_value_1: 5204
model_value_2: 5208
section: Channel 4
group: Marker 3

[Ch 4 - Marker 3]
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
group: Output
permission: WRITE
model_value_1: 5204
model_value_2: 5208
section: Channel 4

[Ch4 - Marker 4 High]
datatype: DOUBLE
label: Marker 4 High
unit: V
def_value: 1.0
low_lim: -0.3
high_lim: 1.75
set_cmd: SOUR4:MARK4:VOLT:HIGH
model_value_1: 5204
model_value_2: 5208
section: Channel 4
group: Marker 4

[Ch4 - Marker 4 Low]
datatype: DOUBLE
label: Marker 4 Low
unit: V
def_value: 0
low_lim: -0.5
high_lim: 1.55
set_cmd: SOUR4:MARK4:VOLT:LOW
model_value_1: 5204
model_value_2: 5208
section: Channel 4
group: Marker 4

[Ch4 - Marker 4 Delay]
datatype: DOUBLE
label: Marker 4 Delay
unit: s
def_value: 0
low_lim: -3e-09
high_lim: 3e-09
set_cmd: SOUR4:MARK4:DEL
model_value_1: 5204
model_value_2: 5208
section: Channel 4
group: Marker 4

[Ch 4 - Marker 4]
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
group: Output
permission: WRITE
model_value_1: 5204
model_value_2: 5208
section: Channel 4

[Ch5 - Output]
datatype: BOOLEAN
label: Output
def_value: False
set_cmd: OUTP5
model_value_1: 5208
section: Channel 5
group: Channel

[Ch5 - Run mode]
datatype: COMBO
label: Run mode
def_value: Triggered
set_cmd: SOUR5:RMODE
model_value_1: 5208
combo_def_1: Continuous
cmd_def_1: CONT
combo_def_2: Triggered
cmd_def_2: TRIG
combo_def_3: Triggered Continuous
cmd_def_3: TCON
combo_def_4: Gated
cmd_def_4: GAT
section: Channel 5
group: Channel

[Ch5 - Trigger Source]
datatype: COMBO
label: Trigger Source
def_value: A
set_cmd: SOUR5:TINP
state_quant: Ch5 - Run mode
state_value_1: Triggered
state_value_2: Triggered Continuous
model_value_1: 5208
combo_def_1: A
cmd_def_1: ATR
combo_def_2: B
cmd_def_2: BTR
combo_def_3: Internal
cmd_def_3: ITR
section: Channel 5
group: Channel

[Ch5 - Trigger Source Gated]
datatype: COMBO
label: Trigger Source
def_value: A
set_cmd: SOUR5:TINP
state_quant: Ch5 - Run mode
state_value_1: Gated
model_value_1: 5208
combo_def_1: A
cmd_def_1: ATR
combo_def_2: B
cmd_def_2: BTR
section: Channel 5
group: Channel

[Ch5 - Range]
datatype: DOUBLE
label: Range
unit: V
def_value: 0.5
low_lim: 0.025
high_lim: 0.75
set_cmd: SOUR5:VOLT
model_value_1: 5208
section: Channel 5
group: Channel

[Ch5 - Offset]
datatype: DOUBLE
label: Offset
unit: V
def_value: 0
low_lim: -2
high_lim: 2
set_cmd: :SOUR5:VOLT:OFFS
model_value_1: 5208
section: Channel 5
group: Channel

[Ch5 - Skew]
datatype: DOUBLE
label: Skew
unit: s
def_value: 0
tooltip: Minimum step is 0.5 ps
low_lim: -2e-09
high_lim: 2e-09
set_cmd: SOUR5:SKEW
model_value_1: 5208
section: Channel 5
group: Channel

[Ch5 - DAC]
datatype: COMBO
label: DAC resolution
def_value: 16 bit DAC + 0 marker
set_cmd: SOUR5:DAC:RES
model_value_1: 5208
combo_def_1: 16 bit DAC + 0 marker
cmd_def_1: 16
combo_def_2: 15 bit DAC + 1 marker
cmd_def_2: 15
combo_def_3: 14 bit DAC + 2 marker
cmd_def_3: 14
combo_def_4: 13 bit DAC + 3 marker
cmd_def_4: 13
combo_def_5: 12 bit DAC + 4 marker
cmd_def_5: 12
section: Channel 5
group: Channel

[Ch 5]
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
group: Output
permission: WRITE
show_in_measurement_dlg: True
model_value_1: 5208
section: Channel 5

[Ch5 - Marker 1 High]
datatype: DOUBLE
label: Marker 1 High
unit: V
def_value: 1.0
low_lim: -0.3
high_lim: 1.75
set_cmd: SOUR5:MARK1:VOLT:HIGH
model_value_1: 5208
section: Channel 5
group: Marker 1

[Ch5 - Marker 1 Low]
datatype: DOUBLE
label: Marker 1 Low
unit: V
def_value: 0
low_lim: -0.5
high_lim: 1.55
set_cmd: SOUR5:MARK1:VOLT:LOW
model_value_1: 5208
section: Channel 5
group: Marker 1

[Ch5 - Marker 1 Delay]
datatype: DOUBLE
label: Marker 1 Delay
unit: s
def_value: 0
low_lim: -3e-09
high_lim: 3e-09
set_cmd: SOUR5:MARK1:DEL
model_value_1: 5208
section: Channel 5
group: Marker 1

[Ch 5 - Marker 1]
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
group: Output
permission: WRITE
model_value_1: 5208
section: Channel 5

[Ch5 - Marker 2 High]
datatype: DOUBLE
label: Marker 2 High
unit: V
def_value: 1.0
low_lim: -0.3
high_lim: 1.75
set_cmd: SOUR5:MARK2:VOLT:HIGH
model_value_1: 5208
section: Channel 5
group: Marker 2

[Ch5 - Marker 2 Low]
datatype: DOUBLE
label: Marker 2 Low
unit: V
def_value: 0
low_lim: -0.5
high_lim: 1.55
set_cmd: SOUR5:MARK2:VOLT:LOW
model_value_1: 5208
section: Channel 5
group: Marker 2

[Ch5 - Marker 2 Delay]
datatype: DOUBLE
label: Marker 2 Delay
unit: s
def_value: 0
low_lim: -3e-09
high_lim: 3e-09
set_cmd: SOUR5:MARK2:DEL
model_value_1: 5208
section: Channel 5
group: Marker 2

[Ch 5 - Marker 2]
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
group: Output
permission: WRITE
model_value_1: 5208
section: Channel 5

[Ch5 - Marker 3 High]
datatype: DOUBLE
label: Marker 3 High
unit: V
def_value: 1.0
low_lim: -0.3
high_lim: 1.75
set_cmd: SOUR5:MARK3:VOLT:HIGH
model_value_1: 5208
section: Channel 5
group: Marker 3

[Ch5 - Marker 3 Low]
datatype: DOUBLE
label: Marker 3 Low
unit: V
def_value: 0
low_lim: -0.5
high_lim: 1.55
set_cmd: SOUR5:MARK3:VOLT:LOW
model_value_1: 5208
section: Channel 5
group: Marker 3

[Ch5 - Marker 3 Delay]
datatype: DOUBLE
label: Marker 3 Delay
unit: s
def_value: 0
low_lim: -3e-09
high_lim: 3e-09
set_cmd: SOUR5:MARK3:DEL
model_value_1: 5208
section: Channel 5
group: Marker 3

[Ch 5 - Marker 3]
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
group: Output
permission: WRITE
model_value_1: 5208
section: Channel 5

[Ch5 - Marker 4 High]
datatype: DOUBLE
label: Marker 4 High
unit: V
def_value: 1.0
low_lim: -0.3
high_lim: 1.75
set_cmd: SOUR5:MARK4:VOLT:HIGH
model_value_1: 5208
section: Channel 5
group: Marker 4

[Ch5 - Marker 4 Low]
datatype: DOUBLE
label: Marker 4 Low
unit: V
def_value: 0
low_lim: -0.5
high_lim: 1.55
set_cmd: SOUR5:MARK4:VOLT:LOW
model_value_1: 5208
section: Channel 5
group: Marker 4

[Ch5 - Marker 4 Delay]
datatype: DOUBLE
label: Marker 4 Delay
unit: s
def_value: 0
low_lim: -3e-09
high_lim: 3e-09
set_cmd: SOUR5:MARK4:DEL
model_value_1: 5208
section: Channel 5
group: Marker 4

[Ch 5 - Marker 4]
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
group: Output
permission: WRITE
model_value_1: 5208
section: Channel 5

[Ch6 - Output]
datatype: BOOLEAN
label: Output
def_value: False
set_cmd: OUTP6
model_value_1: 5208
section: Channel 6
group: Channel

[Ch6 - Run mode]
datatype: COMBO
label: Run mode
def_value: Triggered
set_cmd: SOUR6:RMODE
model_value_1: 5208
combo_def_1: Continuous
cmd_def_1: CONT
combo_def_2: Triggered
cmd_def_2: TRIG
combo_def_3: Triggered Continuous
cmd_def_3: TCON
combo_def_4: Gated
cmd_def_4: GAT
section: Channel 6
group: Channel

[Ch6 - Trigger Source]
datatype: COMBO
label: Trigger Source
def_value: A
set_cmd: SOUR6:TINP
state_quant: Ch6 - Run mode
state_value_1: Triggered
state_value_2: Triggered Continuous
model_value_1: 5208
combo_def_1: A
cmd_def_1: ATR
combo_def_2: B
cmd_def_2: BTR
combo_def_3: Internal
cmd_def_3: ITR
section: Channel 6
group: Channel

[Ch6 - Trigger Source Gated]
datatype: COMBO
label: Trigger Source
def_value: A
set_cmd: SOUR6:TINP
state_quant: Ch6 - Run mode
state_value_1: Gated
model_value_1: 5208
combo_def_1: A
cmd_def_1: ATR
combo_def_2: B
cmd_def_2: BTR
section: Channel 6
group: Channel

[Ch6 - Range]
datatype: DOUBLE
label: Range
unit: V
def_value: 0.5
low_lim: 0.025
high_lim: 0.75
set_cmd: SOUR6:VOLT
model_value_1: 5208
section: Channel 6
group: Channel

[Ch6 - Offset]
datatype: DOUBLE
label: Offset
unit: V
def_value: 0
low_lim: -2
high_lim: 2
set_cmd: :SOUR6:VOLT:OFFS
model_value_1: 5208
section: Channel 6
group: Channel

[Ch6 - Skew]
datatype: DOUBLE
label: Skew
unit: s
def_value: 0
tooltip: Minimum step is 0.5 ps
low_lim: -2e-09
high_lim: 2e-09
set_cmd: SOUR6:SKEW
model_value_1: 5208
section: Channel 6
group: Channel

[Ch6 - DAC]
datatype: COMBO
label: DAC resolution
def_value: 16 bit DAC + 0 marker
set_cmd: SOUR6:DAC:RES
model_value_1: 5208
combo_def_1: 16 bit DAC + 0 marker
cmd_def_1: 16
combo_def_2: 15 bit DAC + 1 marker
cmd_def_2: 15
combo_def_3: 14 bit DAC + 2 marker
cmd_def_3: 14
combo_def_4: 13 bit DAC + 3 marker
cmd_def_4: 13
combo_def_5: 12 bit DAC + 4 marker
cmd_def_5: 12
section: Channel 6
group: Channel

[Ch 6]
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
group: Output
permission: WRITE
show_in_measurement_dlg: True
model_value_1: 5208
section: Channel 6

[Ch6 - Marker 1 High]
datatype: DOUBLE
label: Marker 1 High
unit: V
def_value: 1.0
low_lim: -0.3
high_lim: 1.75
set_cmd: SOUR6:MARK1:VOLT:HIGH
model_value_1: 5208
section: Channel 6
group: Marker 1

[Ch6 - Marker 1 Low]
datatype: DOUBLE
label: Marker 1 Low
unit: V
def_value: 0
low_lim: -0.5
high_lim: 1.55
set_cmd: SOUR6:MARK1:VOLT:LOW
model_value_1: 5208
section: Channel 6
group: Marker 1

[Ch6 - Marker 1 Delay]
datatype: DOUBLE
label: Marker 1 Delay
unit: s
def_value: 0
low_lim: -3e-09
high_lim: 3e-09
set_cmd: SOUR6:MARK1:DEL
model_value_1: 5208
section: Channel 6
group: Marker 1

[Ch 6 - Marker 1]
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
group: Output
permission: WRITE
model_value_1: 5208
section: Channel 6

[Ch6 - Marker 2 High]
datatype: DOUBLE
label: Marker 2 High
unit: V
def_value: 1.0
low_lim: -0.3
high_lim: 1.75
set_cmd: SOUR6:MARK2:VOLT:HIGH
model_value_1: 5208
section: Channel 6
group: Marker 2

[Ch6 - Marker 2 Low]
datatype: DOUBLE
label: Marker 2 Low
unit: V
def_value: 0
low_lim: -0.5
high_lim: 1.55
set_cmd: SOUR6:MARK2:VOLT:LOW
model_value_1: 5208
section: Channel 6
group: Marker 2

[Ch6 - Marker 2 Delay]
datatype: DOUBLE
label: Marker 2 Delay
unit: s
def_value: 0
low_lim: -3e-09
high_lim: 3e-09
set_cmd: SOUR6:MARK2:DEL
model_value_1: 5208
section: Channel 6
group: Marker 2

[Ch 6 - Marker 2]
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
group: Output
permission: WRITE
model_value_1: 5208
section: Channel 6

[Ch6 - Marker 3 High]
datatype: DOUBLE
label: Marker 3 High
unit: V
def_value: 1.0
low_lim: -0.3
high_lim: 1.75
set_cmd: SOUR6:MARK3:VOLT:HIGH
model_value_1: 5208
section: Channel 6
group: Marker 3

[Ch6 - Marker 3 Low]
datatype: DOUBLE
label: Marker 3 Low
unit: V
def_value: 0
low_lim: -0.5
high_lim: 1.55
set_cmd: SOUR6:MARK3:VOLT:LOW
model_value_1: 5208
section: Channel 6
group: Marker 3

[Ch6 - Marker 3 Delay]
datatype: DOUBLE
label: Marker 3 Delay
unit: s
def_value: 0
low_lim: -3e-09
high_lim: 3e-09
set_cmd: SOUR6:MARK3:DEL
model_value_1: 5208
section: Channel 6
group: Marker 3

[Ch 6 - Marker 3]
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
group: Output
permission: WRITE
model_value_1: 5208
section: Channel 6

[Ch6 - Marker 4 High]
datatype: DOUBLE
label: Marker 4 High
unit: V
def_value: 1.0
low_lim: -0.3
high_lim: 1.75
set_cmd: SOUR6:MARK4:VOLT:HIGH
model_value_1: 5208
section: Channel 6
group: Marker 4

[Ch6 - Marker 4 Low]
datatype: DOUBLE
label: Marker 4 Low
unit: V
def_value: 0
low_lim: -0.5
high_lim: 1.55
set_cmd: SOUR6:MARK4:VOLT:LOW
model_value_1: 5208
section: Channel 6
group: Marker 4

[Ch6 - Marker 4 Delay]
datatype: DOUBLE
label: Marker 4 Delay
unit: s
def_value: 0
low_lim: -3e-09
high_lim: 3e-09
set_cmd: SOUR6:MARK4:DEL
model_value_1: 5208
section: Channel 6
group: Marker 4

[Ch 6 - Marker 4]
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
group: Output
permission: WRITE
model_value_1: 5208
section: Channel 6

[Ch7 - Output]
datatype: BOOLEAN
label: Output
def_value: False
set_cmd: OUTP7
model_value_1: 5208
section: Channel 7
group: Channel

[Ch7 - Run mode]
datatype: COMBO
label: Run mode
def_value: Triggered
set_cmd: SOUR7:RMODE
model_value_1: 5208
combo_def_1: Continuous
cmd_def_1: CONT
combo_def_2: Triggered
cmd_def_2: TRIG
combo_def_3: Triggered Continuous
cmd_def_3: TCON
combo_def_4: Gated
cmd_def_4: GAT
section: Channel 7
group: Channel

[Ch7 - Trigger Source]
datatype: COMBO
label: Trigger Source
def_value: A
set_cmd: SOUR7:TINP
state_quant: Ch7 - Run mode
state_value_1: Triggered
state_value_2: Triggered Continuous
model_value_1: 5208
combo_def_1: A
cmd_def_1: ATR
combo_def_2: B
cmd_def_2: BTR
combo_def_3: Internal
cmd_def_3: ITR
section: Channel 7
group: Channel

[Ch7 - Trigger Source Gated]
datatype: COMBO
label: Trigger Source
def_value: A
set_cmd: SOUR7:TINP
state_quant: Ch7 - Run mode
state_value_1: Gated
model_value_1: 5208
combo_def_1: A
cmd_def_1: ATR
combo_def_2: B
cmd_def_2: BTR
section: Channel 7
group: Channel

[Ch7 - Range]
datatype: DOUBLE
label: Range
unit: V
def_value: 0.5
low_lim: 0.025
high_lim: 0.75
set_cmd: SOUR7:VOLT
model_value_1: 5208
section: Channel 7
group: Channel

[Ch7 - Offset]
datatype: DOUBLE
label: Offset
unit: V
def_value: 0
low_lim: -2
high_lim: 2
set_cmd: :SOUR7:VOLT:OFFS
model_value_1: 5208
section: Channel 7
group: Channel

[Ch7 - Skew]
datatype: DOUBLE
label: Skew
unit: s
def_value: 0
tooltip: Minimum step is 0.5 ps
low_lim: -2e-09
high_lim: 2e-09
set_cmd: SOUR7:SKEW
model_value_1: 5208
section: Channel 7
group: Channel

[Ch7 - DAC]
datatype: COMBO
label: DAC resolution
def_value: 16 bit DAC + 0 marker
set_cmd: SOUR7:DAC:RES
model_value_1: 5208
combo_def_1: 16 bit DAC + 0 marker
cmd_def_1: 16
combo_def_2: 15 bit DAC + 1 marker
cmd_def_2: 15
combo_def_3: 14 bit DAC + 2 marker
cmd_def_3: 14
combo_def_4: 13 bit DAC + 3 marker
cmd_def_4: 13
combo_def_5: 12 bit DAC + 4 marker
cmd_def_5: 12
section: Channel 7
group: Channel

[Ch 7]
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
group: Output
permission: WRITE
show_in_measurement_dlg: True
model_value_1: 5208
section: Channel 7

[Ch7 - Marker 1 High]
datatype: DOUBLE
label: Marker 1 High
unit: V
def_value: 1.0
low_lim: -0.3
high_lim: 1.75
set_cmd: SOUR7:MARK1:VOLT:HIGH
model_value_1: 5208
section: Channel 7
group: Marker 1

[Ch7 - Marker 1 Low]
datatype: DOUBLE
label: Marker 1 Low
unit: V
def_value: 0
low_lim: -0.5
high_lim: 1.55
set_cmd: SOUR7:MARK1:VOLT:LOW
model_value_1: 5208
section: Channel 7
group: Marker 1

[Ch7 - Marker 1 Delay]
datatype: DOUBLE
label: Marker 1 Delay
unit: s
def_value: 0
low_lim: -3e-09
high_lim: 3e-09
set_cmd: SOUR7:MARK1:DEL
model_value_1: 5208
section: Channel 7
group: Marker 1

[Ch 7 - Marker 1]
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
group: Output
permission: WRITE
model_value_1: 5208
section: Channel 7

[Ch7 - Marker 2 High]
datatype: DOUBLE
label: Marker 2 High
unit: V
def_value: 1.0
low_lim: -0.3
high_lim: 1.75
set_cmd: SOUR7:MARK2:VOLT:HIGH
model_value_1: 5208
section: Channel 7
group: Marker 2

[Ch7 - Marker 2 Low]
datatype: DOUBLE
label: Marker 2 Low
unit: V
def_value: 0
low_lim: -0.5
high_lim: 1.55
set_cmd: SOUR7:MARK2:VOLT:LOW
model_value_1: 5208
section: Channel 7
group: Marker 2

[Ch7 - Marker 2 Delay]
datatype: DOUBLE
label: Marker 2 Delay
unit: s
def_value: 0
low_lim: -3e-09
high_lim: 3e-09
set_cmd: SOUR7:MARK2:DEL
model_value_1: 5208
section: Channel 7
group: Marker 2

[Ch 7 - Marker 2]
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
group: Output
permission: WRITE
model_value_1: 5208
section: Channel 7

[Ch7 - Marker 3 High]
datatype: DOUBLE
label: Marker 3 High
unit: V
def_value: 1.0
low_lim: -0.3
high_lim: 1.75
set_cmd: SOUR7:MARK3:VOLT:HIGH
model_value_1: 5208
section: Channel 7
group: Marker 3

[Ch7 - Marker 3 Low]
datatype: DOUBLE
label: Marker 3 Low
unit: V
def_value: 0
low_lim: -0.5
high_lim: 1.55
set_cmd: SOUR7:MARK3:VOLT:LOW
model_value_1: 5208
section: Channel 7
group: Marker 3

[Ch7 - Marker 3 Delay]
datatype: DOUBLE
label: Marker 3 Delay
unit: s
def_value: 0
low_lim: -3e-09
high_lim: 3e-09
set_cmd: SOUR7:MARK3:DEL
model_value_1: 5208
section: Channel 7
group: Marker 3

[Ch 7 - Marker 3]
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
group: Output
permission: WRITE
model_value_1: 5208
section: Channel 7

[Ch7 - Marker 4 High]
datatype: DOUBLE
label: Marker 4 High
unit: V
def_value: 1.0
low_lim: -0.3
high_lim: 1.75
set_cmd: SOUR7:MARK4:VOLT:HIGH
model_value_1: 5208
section: Channel 7
group: Marker 4

[Ch7 - Marker 4 Low]
datatype: DOUBLE
label: Marker 4 Low
unit: V
def_value: 0
low_lim: -0.5
high_lim: 1.55
set_cmd: SOUR7:MARK4:VOLT:LOW
model_value_1: 5208
section: Channel 7
group: Marker 4

[Ch7 - Marker 4 Delay]
datatype: DOUBLE
label: Marker 4 Delay
unit: s
def_value: 0
low_lim: -3e-09
high_lim: 3e-09
set_cmd: SOUR7:MARK4:DEL
model_value_1: 5208
section: Channel 7
group: Marker 4

[Ch 7 - Marker 4]
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
group: Output
permission: WRITE
model_value_1: 5208
section: Channel 7

[Ch8 - Output]
datatype: BOOLEAN
label: Output
def_value: False
set_cmd: OUTP8
model_value_1: 5208
section: Channel 8
group: Channel

[Ch8 - Run mode]
datatype: COMBO
label: Run mode
def_value: Triggered
set_cmd: SOUR8:RMODE
model_value_1: 5208
combo_def_1: Continuous
cmd_def_1: CONT
combo_def_2: Triggered
cmd_def_2: TRIG
combo_def_3: Triggered Continuous
cmd_def_3: TCON
combo_def_4: Gated
cmd_def_4: GAT
section: Channel 8
group: Channel

[Ch8 - Trigger Source]
datatype: COMBO
label: Trigger Source
def_value: A
set_cmd: SOUR8:TINP
state_quant: Ch8 - Run mode
state_value_1: Triggered
state_value_2: Triggered Continuous
model_value_1: 5208
combo_def_1: A
cmd_def_1: ATR
combo_def_2: B
cmd_def_2: BTR
combo_def_3: Internal
cmd_def_3: ITR
section: Channel 8
group: Channel

[Ch8 - Trigger Source Gated]
datatype: COMBO
label: Trigger Source
def_value: A
set_cmd: SOUR8:TINP
state_quant: Ch8 - Run mode
state_value_1: Gated
model_value_1: 5208
combo_def_1: A
cmd_def_1: ATR
combo_def_2: B
cmd_def_2: BTR
section: Channel 8
group: Channel

[Ch8 - Range]
datatype: DOUBLE
label: Range
unit: V
def_value: 0.5
low_lim: 0.025
high_lim: 0.75
set_cmd: SOUR8:VOLT
model_value_1: 5208
section: Channel 8
group: Channel

[Ch8 - Offset]
datatype: DOUBLE
label: Offset
unit: V
def_value: 0
low_lim: -2
high_lim: 2
set_cmd: :SOUR8:VOLT:OFFS
model_value_1: 5208
section: Channel 8
group: Channel

[Ch8 - Skew]
datatype: DOUBLE
label: Skew
unit: s
def_value: 0
tooltip: Minimum step is 0.5 ps
low_lim: -2e-09
high_lim: 2e-09
set_cmd: SOUR8:SKEW
model_value_1: 5208
section: Channel 8
group: Channel

[Ch8 - DAC]
datatype: COMBO
label: DAC resolution
def_value: 16 bit DAC + 0 marker
set_cmd: SOUR8:DAC:RES
model_value_1: 5208
combo_def_1: 16 bit DAC + 0 marker
cmd_def_1: 16
combo_def_2: 15 bit DAC + 1 marker
cmd_def_2: 15
combo_def_3: 14 bit DAC + 2 marker
cmd_def_3: 14
combo_def_4: 13 bit DAC + 3 marker
cmd_def_4: 13
combo_def_5: 12 bit DAC + 4 marker
cmd_def_5: 12
section: Channel 8
group: Channel

[Ch 8]
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
group: Output
permission: WRITE
show_in_measurement_dlg: True
model_value_1: 5208
section: Channel 8

[Ch8 - Marker 1 High]
datatype: DOUBLE
label: Marker 1 High
unit: V
def_value: 1.0
low_lim: -0.3
high_lim: 1.75
set_cmd: SOUR8:MARK1:VOLT:HIGH
model_value_1: 5208
section: Channel 8
group: Marker 1

[Ch8 - Marker 1 Low]
datatype: DOUBLE
label: Marker 1 Low
unit: V
def_value: 0
low_lim: -0.5
high_lim: 1.55
set_cmd: SOUR8:MARK1:VOLT:LOW
model_value_1: 5208
section: Channel 8
group: Marker 1

[Ch8 - Marker 1 Delay]
datatype: DOUBLE
label: Marker 1 Delay
unit: s
def_value: 0
low_lim: -3e-09
high_lim: 3e-09
set_cmd: SOUR8:MARK1:DEL
model_value_1: 5208
section: Channel 8
group: Marker 1

[Ch 8 - Marker 1]
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
group: Output
permission: WRITE
model_value_1: 5208
section: Channel 8

[Ch8 - Marker 2 High]
datatype: DOUBLE
label: Marker 2 High
unit: V
def_value: 1.0
low_lim: -0.3
high_lim: 1.75
set_cmd: SOUR8:MARK2:VOLT:HIGH
model_value_1: 5208
section: Channel 8
group: Marker 2

[Ch8 - Marker 2 Low]
datatype: DOUBLE
label: Marker 2 Low
unit: V
def_value: 0
low_lim: -0.5
high_lim: 1.55
set_cmd: SOUR8:MARK2:VOLT:LOW
model_value_1: 5208
section: Channel 8
group: Marker 2

[Ch8 - Marker 2 Delay]
datatype: DOUBLE
label: Marker 2 Delay
unit: s
def_value: 0
low_lim: -3e-09
high_lim: 3e-09
set_cmd: SOUR8:MARK2:DEL
model_value_1: 5208
section: Channel 8
group: Marker 2

[Ch 8 - Marker 2]
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
group: Output
permission: WRITE
model_value_1: 5208
section: Channel 8

[Ch8 - Marker 3 High]
datatype: DOUBLE
label: Marker 3 High
unit: V
def_value: 1.0
low_lim: -0.3
high_lim: 1.75
set_cmd: SOUR8:MARK3:VOLT:HIGH
model_value_1: 5208
section: Channel 8
group: Marker 3

[Ch8 - Marker 3 Low]
datatype: DOUBLE
label: Marker 3 Low
unit: V
def_value: 0
low_lim: -0.5
high_lim: 1.55
set_cmd: SOUR8:MARK3:VOLT:LOW
model_value_1: 5208
section: Channel 8
group: Marker 3

[Ch8 - Marker 3 Delay]
datatype: DOUBLE
label: Marker 3 Delay
unit: s
def_value: 0
low_lim: -3e-09
high_lim: 3e-09
set_cmd: SOUR8:MARK3:DEL
model_value_1: 5208
section: Channel 8
group: Marker 3

[Ch 8 - Marker 3]
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
group: Output
permission: WRITE
model_value_1: 5208
section: Channel 8

[Ch8 - Marker 4 High]
datatype: DOUBLE
label: Marker 4 High
unit: V
def_value: 1.0
low_lim: -0.3
high_lim: 1.75
set_cmd: SOUR8:MARK4:VOLT:HIGH
model_value_1: 5208
section: Channel 8
group: Marker 4

[Ch8 - Marker 4 Low]
datatype: DOUBLE
label: Marker 4 Low
unit: V
def_value: 0
low_lim: -0.5
high_lim: 1.55
set_cmd: SOUR8:MARK4:VOLT:LOW
model_value_1: 5208
section: Channel 8
group: Marker 4

[Ch8 - Marker 4 Delay]
datatype: DOUBLE
label: Marker 4 Delay
unit: s
def_value: 0
low_lim: -3e-09
high_lim: 3e-09
set_cmd: SOUR8:MARK4:DEL
model_value_1: 5208
section: Channel 8
group: Marker 4

[Ch 8 - Marker 4]
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
group: Output
permission: WRITE
model_value_1: 5208
section: Channel 8

